CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<row>[A-O])_(?P<column>13|14)_fld_(?P<field>[1-4])_time_(?P<time>0[1-9]|1[0-9])\.png$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VideoID>[A-O]_(?:13|14)_fld_[1-4])_time_(?P<time>0[1-9]|1[0-9])\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:images
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VideoID

ColorToGray:[module_num:5|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
    Select the input image:images
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigRed
    Name the primary objects to be identified:cell_nucleus
    Typical diameter of objects, in pixel units (Min,Max):25,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:cell_nucleus
    Name the objects to be identified:whole_cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:whole_cell
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    Maximum pixel distance to consider matches:10
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:19
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tracked_cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:images
    Name the output image:OutlineImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:cell_nucleus
    Select outline color:white
    Select objects to display:whole_cell

SaveImages:[module_num:11|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notes:['this apparently saves to input folder...']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
    Select the type of image to save:Image
    Select the image to save:OutlineImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Output Folder|/workspaces/biocomp/tboyer/sources/CellProfiler_GaussianProxy_analyses/TMP_TESTS_outputs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Tile:[module_num:12|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
    Select an input image:images
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:Yes
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OutlineImage
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tile
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:FilteredNuclei, whole_cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/workspaces/biocomp/tboyer/sources/CellProfiler_GaussianProxy_analyses/TMP_TESTS_outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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